PsychoPy2experiment version="2026.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '9', 'session': '01'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = nnl_2afc
  frameRate = 30
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine start
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    TextComponent trigger_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for Sync Pulse
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent sync_start
      Code Type = Py
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      Before Experiment:
        import nordic_neuro_lab

        sync_box = nordic_neuro_lab.SyncBox(
            num_volumes=300,
            num_slices=1,
            trigger_slice=1,
            trigger_volume=1,
            pulse_length=100,
            tr_time=3000,
            optional_trigger_slice=0,
            optional_trigger_volume=0,
            simulation=False,
        )
      Begin Routine:
        sync_box.start()
      Each Frame:
        trigger = sync_box.get_trigger(timeout=None)
        if trigger in ["s"]:
            print(f"Start Button response: {trigger}")
            continueRoutine = False
  Routine force_choice
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    PolygonComponent fixation_2afc
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = height
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    ImageComponent left_img
      image = default.png
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    StaticComponent ISI_load_images
      disabled = True
      saveData = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent right_img
      image = default.png
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','b','c','d','s'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
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    CodeComponent sync_capture
      Code Type = Py
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      Begin Routine:
        import time

        begin_time = time.perf_counter()
      Each Frame:
        resp, rt, dur = sync_box.get_response(begin_time, timeout=0.001)
        #if resp and resp in ["a", "b", "c", "d"]:
        if resp:
            key_resp_2.keys = resp
            key_resp_2.rt = rt
            key_resp_2.duration = dur
  Routine end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = End of experiment
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    CodeComponent sync_close
      Code Type = Py
      End Experiment:
        sync_box.stop()
        sync_box.close()
  Routine isi
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine isi
    Routine force_choice
  LoopTerminator trials
  Routine end
